PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Data filename = u'data/%s_%s_%s' % (expInfo['participant'], expInfo['session'], expName)
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  clockFormat = iso
  color = 0.9216, 0.9216, 0.7255
  expName = CAREST
  frameRate = 60
  keyboardBackend = ioHub
  logging level = error
  measureFrameRate = False
  runMode = 1
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Routines
  Routine trial
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    ImageComponent imageSliderRating
      image = VAS_as_v3.jpg
      saveStartStop = False
      size = (1.8, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    SliderComponent sliderRating
      borderColor = black
      color = black
      fillColor = red
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (-0.014, -0.35)
      saveStartStop = False
      size = (1.43, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeRatingTime = False
      styles = rating
      syncScreenRefresh = False
      ticks = (0, 100)
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    SliderComponent slider_stop
      color = Gray
      fillColor = Darkgray
      forceEndRoutine = False
      granularity = 0
      initVal = 1
      labels = 'ON','OFF'
      letterHeight = 0.015
      opacity = 0.2
      pos = (0.45, 0.45)
      saveStartStop = False
      size = (0.25, 0.03)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 2
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = choice
      ticks = (1, 2)
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    CodeComponent code_read_temp
      Code Type = Auto->JS
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      End Routine:
        temperature_PT = hpc.Read_temp(ser)
        rating_loop.addData('temperature_PT', temperature_PT)

        # Read contact force data from scales
        if config.serial_port_scales:
           serscales.write(Scale_read_byte)
           serscales.flush()
           time.sleep(0.1)
           cf_bytes_read = serscales.readline()
           decoded_cf_string = cf_bytes_read.decode('latin-1')
           cleaned_cf_string = decoded_cf_string.strip()
           rating_loop.addData('contact_force', cleaned_cf_string)
        else:
           rating_loop.addData('contact_force', None)
    CodeComponent code_marker_save
      Code Type = Auto->JS
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      End Routine:
        rating_loop.addData('sliderRating.markerPos', sliderRating.getMarkerPos())
        #Finish experiment with slider_stop
        if slider_stop.getRating() == 2 :
            hpc.Stop_ramp(ser)
            rating_loop.finished = 1
    CodeComponent code_clockGetTime
      Code Type = Auto->JS
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      Begin Routine:
        if newClock.getTime() >= ramp_up_time_total:
            rating_loop.finished = 1
  Routine GoodbyScreen
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    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text = Danke für die Teilnahme!
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  Routine WelcomeScreen
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    TextComponent text_welcomeScreen
      color = black
      letterHeight = 0.08
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Willkommen zum Wärmeplattenexperiment

        Du kannst nun Deine Hand auf die Wärmeplatte legen.
    SliderComponent slider_weiter
      forceEndRoutine = True
      granularity = 0
      initVal = 1
      labels = '0', 'Weiter'
      letterHeight = 0.05
      pos = (-0.4, -0.4)
      saveStartStop = False
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = choice
      ticks = (1, 2)
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  Routine TrialTest
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    ImageComponent imageSliderTest
      image = Farbverlauf_horizontal.jpg
      saveStartStop = False
      size = (1.6, 1.0)
      startVal [time (s)] = 0.0
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    SliderComponent sliderSliderTest
      fillColor = Yellow
      forceEndRoutine = False
      granularity = 0
      initVal = 0
      labels = '0', '20', '40', '60', '80', '100'
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      syncScreenRefresh = False
      ticks = (0, 1, 2, 3, 4, 5)
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    TextComponent textSliderTest
      color = black
      letterHeight = 0.03
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      wrapWidth = 1.0
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      text:
        Hier kannst Du Dich mit der Bedienung des Touchscreens vertraut machen.
        Dazu schiebe mit dem Finger den gelben Kreis z.B. auf die 80 und zurück auf 20. Wiederhole dies mit verschiedenen Zahlen, bis Du den Kreis sicher bewegen kannst.


        Zum Start des Experiments "Wärmeplatte" schiebe  auf "Start".
    SliderComponent slider_start_2
      forceEndRoutine = True
      granularity = 0
      initVal = 1
      labels = 'Stop', 'Start'
      letterHeight = 0.05
      pos = (-0.4, -0.4)
      saveStartStop = False
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = choice
      ticks = (1, 2)
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  Routine endtrial
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    ImageComponent imageSliderRating_2
      image = VAS_as_v3.jpg
      saveStartStop = False
      size = (1.8, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_endtrial
      color = black
      letterHeight = 0.05
      pos = (0, 0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Bitte gibt noch einmal Dein Schmerzempfinden ein.
      wrapWidth = 10
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    SliderComponent sliderRating_2
      borderColor = black
      color = black
      fillColor = red
      forceEndRoutine = True
      granularity = 1
      letterHeight = 0.03
      pos = (-0.015, -0.22)
      saveStartStop = False
      size = (1.43, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      storeRatingTime = False
      styles = rating
      syncScreenRefresh = False
      ticks = (0, 100)
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  Routine Start_ramp
    RoutineSettingsComponent Start_ramp
      saveStartStop = False
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    CodeComponent code_start_ramp
      Code Type = Auto->JS
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      Begin Routine:
        if config.serial_port_scales:
           serscales.write(Scale_read_byte)
           serscales.flush()
           time.sleep(0.4)
           serscales.readline()
        hpc.Start_ramp(ser)
    TextComponent text_start_ramp
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      syncScreenRefresh = False
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    CodeComponent code_clockReset
      Code Type = Auto->JS
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      End Routine:
        newClock.reset()
  Routine StandbyScreen
    RoutineSettingsComponent StandbyScreen
      saveStartStop = False
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    CodeComponent code_bf_exp
      Code Type = Auto->JS
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      Before Experiment:
        # v_19.08.2025
        import serial
        import time
        import struct
        import HP_commands_config as hpc
        newClock = core.Clock()
        # Setup serial port for heat plate
        # Load config file parameters
        config = hpc.load_config("config_HP.dat")
        ser = serial.Serial(config.serial_port_HP, baudrate = 19200, timeout = 1)
        ser.reset_input_buffer()
        ser.reset_output_buffer()
        time.sleep(0.05)
        # Setup serial port for scales
        if config.serial_port_scales:
           serscales = serial.Serial(config.serial_port_scales, baudrate = 19200, timeout = 1)
           serscales.reset_input_buffer()
           serscales.reset_output_buffer()
           time.sleep(0.05)
           # Bytes to tare and read the scales
           Scale_tare_byte = bytes([0x30])
           Scale_read_byte = bytes([0x0D])
           # Tare the scales
           serscales.write(Scale_tare_byte)
           serscales.flush()
        else:
           print(f" Serial scales port is not available ")
        # Prepare the HP controller
        # Stop ramp if still running from previous experiment
        hpc.Stop_ramp(ser)
        # Set and control to SV
        hpc.Set_SV(ser, config)
        hpc.Ctrl_tempON(ser)
        # Set parameters for temperature ramp
        hpc.Set_ramp_val(ser, config)
        # Calculate total ramp_up_time
        ramp_up_time_total = (config.ramp_up_time_bt +
                             config.ramp_up_time_pt +
                             config.hold_time_bt +
                             config.hold_time_pt
                             )
        print(f"The time from start to end of the temperature ramp is {ramp_up_time_total} s")
        rating_loop_rep_num = int(ramp_up_time_total / 2)
        print(f"The maximum number of repeats of the rating loop is {rating_loop_rep_num}")
      End Experiment:
        ser.close()
        if config.serial_port_scales:
           serscales.close()
    TextComponent text_standbyScreen
      color = black
      letterHeight = 0.08
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Standby
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    SliderComponent slider_start
      color = black
      forceEndRoutine = True
      granularity = 0
      initVal = 1
      labels = '0', 'Start'
      letterHeight = 0.05
      pos = (-0.4, -0.4)
      saveStartStop = False
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = choice
      ticks = (1, 2)
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  Routine CalibrateScales
    RoutineSettingsComponent CalibrateScales
      saveStartStop = False
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    TextComponent text_calibrateScales
      color = black
      letterHeight = 0.08
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Wärmeplatte nicht berühren!

        Wägezellen werden kalibriert.
    CodeComponent code_calibrateScales
      Code Type = Auto->JS
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      End Routine:
        # Tare the scales
        if config.serial_port_scales:
           serscales.reset_input_buffer()
           serscales.reset_output_buffer()
           time.sleep(0.1)
           serscales.write(Scale_tare_byte)
           serscales.flush()
           time.sleep(0.1)
  Routine VASexercise1
    RoutineSettingsComponent VASexercise1
      saveStartStop = False
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    ImageComponent imageSliderRating_VASex1
      image = VAS_as_v3.jpg
      saveStartStop = False
      size = (1.8, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100
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    SliderComponent sliderRating_VASex1
      borderColor = black
      color = black
      fillColor = red
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (-0.014, -0.35)
      saveStartStop = False
      size = (1.43, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100
      storeRatingTime = False
      styles = rating
      syncScreenRefresh = False
      ticks = (0, 100)
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    SliderComponent slider_VASex1_weiter
      color = Gray
      fillColor = Darkgray
      forceEndRoutine = True
      granularity = 0
      initVal = 1
      labels = ' ','Weiter'
      letterHeight = 0.015
      opacity = 0.2
      pos = (0.45, 0.45)
      size = (0.25, 0.03)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 100
      storeRating = False
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = choice
      ticks = (1, 2)
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    TextComponent text_VASex1
      color = black
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100
      text = Übung 1
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  Routine VASexercise2
    RoutineSettingsComponent VASexercise2
      saveStartStop = False
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    ImageComponent imageSliderRating_VASex2
      image = VAS_as_v3.jpg
      saveStartStop = False
      size = (1.8, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    SliderComponent sliderRating_VASex2
      borderColor = black
      color = black
      fillColor = red
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (-0.014, -0.35)
      saveStartStop = False
      size = (1.43, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      storeRatingTime = False
      styles = rating
      syncScreenRefresh = False
      ticks = (0, 100)
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    SliderComponent slider_VASex2_weiter
      color = Gray
      fillColor = Darkgray
      forceEndRoutine = True
      granularity = 0
      initVal = 1
      labels = ' ','Weiter'
      letterHeight = 0.015
      opacity = 0.2
      pos = (0.45, 0.45)
      size = (0.25, 0.03)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 30
      storeRating = False
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = choice
      ticks = (1, 2)
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    TextComponent text_VASex2
      color = black
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Übung 2
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  Routine VASexercise3
    RoutineSettingsComponent VASexercise3
      saveStartStop = False
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    ImageComponent imageSliderRating_VASex3
      image = VAS_as_v3.jpg
      saveStartStop = False
      size = (1.8, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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    SliderComponent sliderRating_VASex3
      borderColor = black
      color = black
      fillColor = red
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.03
      pos = (-0.014, -0.35)
      saveStartStop = False
      size = (1.43, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      storeRatingTime = False
      styles = rating
      syncScreenRefresh = False
      ticks = (0, 100)
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    SliderComponent slider_VASex3_weiter
      color = Gray
      fillColor = Darkgray
      forceEndRoutine = True
      granularity = 0
      initVal = 1
      labels = ' ','Weiter'
      letterHeight = 0.015
      opacity = 0.2
      pos = (0.45, 0.45)
      size = (0.25, 0.03)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 30
      storeRating = False
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = choice
      ticks = (1, 2)
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    TextComponent text_VASex3
      color = black
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Übung 3
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Flow
  Routine StandbyScreen
  Routine CalibrateScales
  Routine WelcomeScreen
  Routine Start_ramp
  Routine VASexercise1
  Routine VASexercise2
  Routine VASexercise3
  LoopInitiator rating_loop loopType="TrialHandler"
    loopType = sequential
    nReps = rating_loop_rep_num
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    Routine trial
  LoopTerminator rating_loop
  Routine GoodbyScreen
